############################################################
# Microscope Configuration File                            #
# Generated by YouScope 1.0                                #
# Compatible with Micro-Manager 1.4                        #
# Created: Thu Sep 15 21:56:27 CEST 2011                   #
# Visit www.youscope.org                                   #
############################################################

# Identification of how and for which machines this configuration was created.
# Do not remove or edit the following lines.
#@Generator,YouScope,1.0
#@Compatible,MicroManager,1.3
#@Compatible,MicroManager,1.4
#@CoreVersion,MMCore version 2.3.1
#@CoreAPIVersion,Device API version 45, Module API version 7

# Reset the microscope.
# Do not remove or edit this line, or change its location.
Property,Core,Initialize,0

# Load devices.
Device,Camera,DemoCamera,DCam
Device,Dichroic,DemoCamera,DWheel
Device,Emission,DemoCamera,DWheel
Device,Excitation,DemoCamera,DWheel
Device,Objective,DemoCamera,DObjective
Device,Z,DemoCamera,DStage
Device,Path,DemoCamera,DLightPath
Device,XY,DemoCamera,DXYStage
Device,Shutter,DemoCamera,DShutter
Device,Autofocus,DemoCamera,DAutoFocus

# Pre-initialization settings.

# Initialize the microscope.
# Do not remove or edit this line, or change its location.
Property,Core,Initialize,1

# Explicit delays (in ms).

# Standard devices ("Roles").
Property,Core,AutoFocus,Autofocus
Property,Core,Camera,Camera
Property,Core,Shutter,Shutter
Property,Core,Focus,Z
Property,Core,XYStage,XY

# Devices to which imaging process is synchronized.

# State labels for device Dichroic.
Label,Dichroic,0,400DCLP
Label,Dichroic,1,Q505LP
Label,Dichroic,2,Q585LP
Label,Dichroic,3,State-3
Label,Dichroic,4,State-4
Label,Dichroic,5,State-5
Label,Dichroic,6,State-6
Label,Dichroic,7,State-7
Label,Dichroic,8,State-8
Label,Dichroic,9,State-9

# State labels for device Emission.
Label,Emission,0,Chroma-HQ620
Label,Emission,1,Chroma-D460
Label,Emission,2,Chroma-HQ535
Label,Emission,3,Chroma-HQ700
Label,Emission,4,State-4
Label,Emission,5,State-5
Label,Emission,6,State-6
Label,Emission,7,State-7
Label,Emission,8,State-8
Label,Emission,9,State-9

# State labels for device Excitation.
Label,Excitation,0,Chroma-D360
Label,Excitation,1,Chroma-HQ480
Label,Excitation,2,Chroma-HQ570
Label,Excitation,3,Chroma-HQ620
Label,Excitation,4,State-4
Label,Excitation,5,State-5
Label,Excitation,6,State-6
Label,Excitation,7,State-7
Label,Excitation,8,State-8
Label,Excitation,9,State-9

# State labels for device Objective.
Label,Objective,0,Nikon 40X Plan Flueor ELWD
Label,Objective,1,Nikon 10X S Fluor
Label,Objective,2,Objective-2
Label,Objective,3,Nikon 20X Plan Fluor ELWD
Label,Objective,4,Objective-4
Label,Objective,5,Objective-5

# State labels for device Path.
Label,Path,0,State-0
Label,Path,1,State-1
Label,Path,2,State-2

# Communication timeout (ms).
ConfigGroup,System,Startup,Core,TimeoutMs,30000

# Axes direction settings of stages.
# Stage XY.
ConfigGroup,System,Startup,XY,TransposeMirrorX,0
ConfigGroup,System,Startup,XY,TransposeMirrorY,0

# Axes direction settings of cameras.
# Axes direction settings of camera Camera.
ConfigGroup,System,Startup,Camera,TransposeMirrorX,0
ConfigGroup,System,Startup,Camera,TransposeMirrorY,0
ConfigGroup,System,Startup,Camera,TransposeXY,0

# Startup settings (executed when config file loads).
ConfigGroup,System,Startup,Camera,BitDepth,8
ConfigGroup,System,Startup,Camera,ScanMode,1
ConfigGroup,System,Startup,Objective,Label,Nikon 10X S Fluor

# Shutdown settings (executed when config file loads).

# Channel Camera.HighRes
ConfigGroup,Camera,HighRes,Camera,Binning,1
ConfigGroup,Camera,HighRes,Camera,BitDepth,12
ConfigGroup,Camera,HighRes,Core,AutoShutter,1
ConfigGroup,Camera,HighRes,Core,Shutter,Shutter

# Channel Camera.LowRes
ConfigGroup,Camera,LowRes,Camera,Binning,4
ConfigGroup,Camera,LowRes,Camera,BitDepth,8
ConfigGroup,Camera,LowRes,Core,AutoShutter,1
ConfigGroup,Camera,LowRes,Core,Shutter,Shutter

# Channel Camera.MedRes
ConfigGroup,Camera,MedRes,Camera,Binning,2
ConfigGroup,Camera,MedRes,Camera,BitDepth,10
ConfigGroup,Camera,MedRes,Core,AutoShutter,1
ConfigGroup,Camera,MedRes,Core,Shutter,Shutter

# Channel Channel.Cy5
ConfigGroup,Channel,Cy5,Dichroic,Label,400DCLP
ConfigGroup,Channel,Cy5,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Cy5,Excitation,Label,Chroma-HQ570
ConfigGroup,Channel,Cy5,Core,AutoShutter,1
ConfigGroup,Channel,Cy5,Core,Shutter,Shutter

# Channel Channel.DAPI
ConfigGroup,Channel,DAPI,Dichroic,Label,400DCLP
ConfigGroup,Channel,DAPI,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,DAPI,Excitation,Label,Chroma-D360
ConfigGroup,Channel,DAPI,Core,AutoShutter,1
ConfigGroup,Channel,DAPI,Core,Shutter,Shutter

# Channel Channel.FITC
ConfigGroup,Channel,FITC,Dichroic,Label,Q505LP
ConfigGroup,Channel,FITC,Emission,Label,Chroma-HQ535
ConfigGroup,Channel,FITC,Excitation,Label,Chroma-HQ480
ConfigGroup,Channel,FITC,Core,AutoShutter,1
ConfigGroup,Channel,FITC,Core,Shutter,Shutter

# Channel Channel.Rhodamine
ConfigGroup,Channel,Rhodamine,Dichroic,Label,Q585LP
ConfigGroup,Channel,Rhodamine,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Rhodamine,Excitation,Label,Chroma-HQ570
ConfigGroup,Channel,Rhodamine,Core,AutoShutter,1
ConfigGroup,Channel,Rhodamine,Core,Shutter,Shutter

# Channel LightPath.Camera-left
ConfigGroup,LightPath,Camera-left,Path,State,1
ConfigGroup,LightPath,Camera-left,Core,AutoShutter,1
ConfigGroup,LightPath,Camera-left,Core,Shutter,Shutter

# Channel LightPath.Camera-right
ConfigGroup,LightPath,Camera-right,Path,State,2
ConfigGroup,LightPath,Camera-right,Core,AutoShutter,1
ConfigGroup,LightPath,Camera-right,Core,Shutter,Shutter

# Channel LightPath.Eyepiece
ConfigGroup,LightPath,Eyepiece,Path,State,0
ConfigGroup,LightPath,Eyepiece,Core,AutoShutter,1
ConfigGroup,LightPath,Eyepiece,Core,Shutter,Shutter

# Channel Objective.10X
ConfigGroup,Objective,10X,Objective,State,1
ConfigGroup,Objective,10X,Core,AutoShutter,1
ConfigGroup,Objective,10X,Core,Shutter,Shutter

# Channel Objective.20X
ConfigGroup,Objective,20X,Objective,State,3
ConfigGroup,Objective,20X,Core,AutoShutter,1
ConfigGroup,Objective,20X,Core,Shutter,Shutter

# Channel Objective.40X
ConfigGroup,Objective,40X,Objective,State,0
ConfigGroup,Objective,40X,Core,AutoShutter,1
ConfigGroup,Objective,40X,Core,Shutter,Shutter

# Pixel Size setting Res10x.
ConfigPixelSize,Res10x,Objective,Label,Nikon 10X S Fluor
PixelSize_um,Res10x,1.0

# Pixel Size setting Res20x.
ConfigPixelSize,Res20x,Objective,Label,Nikon 20X Plan Fluor ELWD
PixelSize_um,Res20x,0.5

# Pixel Size setting Res40x.
ConfigPixelSize,Res40x,Objective,Label,Nikon 40X Plan Flueor ELWD
PixelSize_um,Res40x,0.25

